PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  expName = EEG_experimemt
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    ImageComponent instruction_image
      image = img/instructions.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
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    ImageComponent thankyou_image
      image = img/thankyou.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    ImageComponent welcome_image
      image = img/welcome.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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    ImageComponent image_2
      image = cross.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial
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    ImageComponent image
      image = target_diode.bmp
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from titta import Titta, helpers_tobii as helpers
        from titta.TalkToProLab import TalkToProLab
        from psychopy import monitors

        #%% ET settings
        # et_name = 'Tobii Pro Spark'
        et_name = 'Tobii Pro Fusion'
        # et_name = 'Tobii Pro Nano'
        # et_name = 'Tobii Pro Spectrum'

        dummy_mode = False
        project_name = None # None or a project name that is open in Pro Lab.
                            # If None, the currently opened project is used.

        # Change any of the default settings?
        settings = Titta.get_defaults(et_name)

        #%% Connect to eye tracker and calibrate (you need to do this outside of lab)
        tracker = Titta.Connect(settings)
        if dummy_mode:
            tracker.set_dummy_mode()
        tracker.init()

        #%% Talk to Pro Lab
        ttl = TalkToProLab(project_name=project_name,
                           dummy_mode=dummy_mode)
      Begin Experiment:
        settings.FILENAME = expInfo['participant']

        # Participant ID and Project name for Lab
        pid = settings.FILENAME

        participant_info = ttl.add_participant(pid)
        # Calibrate (must be done independently of Lab). You can do it either with the
        # Psychopy build-in calibration, or you can use the Titta calibration by
        # uncommenting the next two lines.
        # tracker.calibrate(win)
        # win.flip()

        #%% Recording

        # Check that Lab is ready to start a recording
        state = ttl.get_state()
        assert state['state'] == 'ready', state['state']

        ## Start recording (Note: you have to click on the Record Tab first!)
        rec = ttl.start_recording("image_viewing",
                            participant_info['participant_id'],
                            screen_width=1920,
                            screen_height=1080)
      Begin Routine:
        # Create Psychopy image objects and upload media to Lab
        # Make sure the images have the same resolution as the screen
        im_target = "target_diode.bmp"
        im_cross =  "cross.jpg"

        im = visual.ImageStim(win, image = im_target)
        media_info = []
        # Upload media (if not already uploaded)
        print('Searching media in Tobii Pro Lab')
        if not ttl.find_media(im_target):
            media_info.append(ttl.upload_media(im_target, "image"))
            print('Media not found, uploading media to Tobii Pro Lab')

        # If the media were uploaded already, just get their names and IDs.
        if len(media_info) == 0:
            print('Media found, organising media to match Tobii Pro Lab')
            uploaded_media = ttl.list_media()['media_list']
            for m in uploaded_media:
                if im_target[:-4] == m['media_name']:
                    media_info.append(m)
                    break

        timestamp = ttl.get_time_stamp()
        t_onset = int(timestamp['timestamp'])
        print('t_onset', t_onset)
      End Experiment:
        ## Stop recording
        ttl.send_message(ttl.external_presenter_address,
            {"operation": "StopRecording"})
        win.close()

        #%% Finalize the recording
        # Finalize recording
        print(rec)
        print(rec['recording_id'])
        ttl.send_message(ttl.external_presenter_address,
            {"operation": "FinalizeRecording",
            "recording_id": rec['recording_id']})
        print('recording has been finalized')
        ttl.disconnect()
      End Routine:
        timestamp = ttl.get_time_stamp()
        t_offset = int(timestamp['timestamp'])
        print('t_offset', t_offset)

        i = 0
        ttl.send_stimulus_event(rec['recording_id'],
                                str(t_onset),
                                media_info[i]['media_id'],
                                end_timestamp = str(t_offset))
    CodeComponent eeg_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        port = serial.Serial(port="COM7",baudrate=2000000)
      Begin Routine:
        #Mark the stimulus onset triggers as "not sent"
        #at the start of the trial
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        ##STIMULUS TRIGGERS##
        #Check to see if the stimulus is presented this frame
        #and send the trigger if it is
        if image.status == STARTED and not stimulus_pulse_started: #Change 'image' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, [0x01])
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True
        #If it's time to end the pulse, reset the value to "0"
        #so that we don't continue sending triggers on every frame
        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.1:
                    win.callOnFlip(port.write, [0x00])
                    stimulus_pulse_ended = True
Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine cross
    Routine trial
  LoopTerminator trials
  Routine Thankyou
